PsychoPy2experiment version="3.0.0b13"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = toast
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Routines
  Routine Instruction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        指导语：
        整个实验要求你观察特定任务下的提示消息，
        理解该消息后立即按空格键，越快越好。

        按“空格键”继续。
    KeyboardComponent key_resp_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Formal
    TextComponent scene
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        现在你想播放音乐
    ImageComponent image
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practise
    TextComponent instruction
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
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      text:
        指导语：
        现在你想要连接wifi
    ImageComponent background
      image [set every repeat] = $image_file
      size = (1, 1)
      startVal [time (s)] = 2
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    ImageComponent toast
      image = D:\program files\psychopy\视觉搜索任务psychopy\320.png
      pos = (0, -0.3)
      size = (0.5,0.2)
      startVal [time (s)] = 3
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    KeyboardComponent key_response_2
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine Tip
    TextComponent Start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        正式实验开始！


        按“空格键”继续。
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instruction
  LoopInitiator loop_1 loopType="TrialHandler"
    conditionsFile = ..\..\收集箱\toast study\conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('conditions', 1), ('image_file', 'D:\\收集箱\\图片\\三体\\timg.jpg')]),
      OrderedDict([('conditions', 2), ('image_file', 'D:\\收集箱\\图片\\三体\\红岸基地.jpg')]),
      OrderedDict([('conditions', 3), ('image_file', 'D:\\收集箱\\图片\\三体\\三体.jpg')]),
      OrderedDict([('conditions', 4), ('image_file', 'D:\\收集箱\\图片\\三体\\三体2.png')])]
    Routine Practise
  LoopTerminator loop_1
  Routine Tip
  LoopInitiator loop_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Formal
  LoopTerminator loop_2
